CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:400
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'CY7': 'FileLocation', 'CY5': 'FileLocation'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ".vsi") (metadata does Series "0") (metadata does C "0")
    Name to assign these images:CY7
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ".vsi") (metadata does Series "0") (metadata does C "1")
    Name to assign these images:CY5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
CorrectIlluminationCalculate:[module_num:4|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notes:['Background estimate for CY7, used as a rolling-ball-style background subtraction (CellProfiler has no literal rolling-ball module).']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
    Select the input image:CY7
    Name the output image:IllumCY7
    Select how the illumination function is calculated:Background
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    Block size:2
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Background estimate for CY5, used as a rolling-ball-style background subtraction (CellProfiler has no literal rolling-ball module). Block size tuned independently from CY7 (4 vs 2) since the two channels responded differently to background-fit tightness during calibration against the EVAnalyzer Fiji plugin ground truth.']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
    Select the input image:CY5
    Name the output image:IllumCY5
    Select how the illumination function is calculated:Background
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    Block size:4
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['Subtract the estimated background from each channel (closest native equivalent to rolling-ball background subtraction).']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
    Select the input image:CY7
    Name the output image:CorrCY7
    Select the illumination function:IllumCY7
    Select how the illumination function is applied:Subtract
    Select the input image:CY5
    Name the output image:CorrCY5
    Select the illumination function:IllumCY5
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Smooth:[module_num:7|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notes:['First of two blur passes on CY7 (reference pipeline applies a ~3px blur twice).']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
    Select the input image:CorrCY7
    Name the output image:SmoothCY7a
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3.0
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
Smooth:[module_num:8|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notes:['Second of two blur passes on CY7.']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
    Select the input image:SmoothCY7a
    Name the output image:SmoothCY7
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3.0
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
Smooth:[module_num:9|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notes:['First of two blur passes on CY5.']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
    Select the input image:CorrCY5
    Name the output image:SmoothCY5a
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3.0
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
Smooth:[module_num:10|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notes:['Second of two blur passes on CY5.']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
    Select the input image:SmoothCY5a
    Name the output image:SmoothCY5
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3.0
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
IdentifyPrimaryObjects:[module_num:11|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notes:['CY7: fixed/manual threshold at raw intensity 50 on a 16-bit (0-65535) scale = 0.000762951 in CellProfiler normalized units. No declumping (plain connected-component labeling).']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
    Select the input image:SmoothCY7
    Name the primary objects to be identified:CY7Objects
    Typical diameter of objects, in pixel units (Min,Max):1,10000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.000762951
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
IdentifyPrimaryObjects:[module_num:12|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notes:['CY5: fixed/manual threshold at raw intensity 200 on a 16-bit (0-65535) scale = 0.003052 in CellProfiler normalized units, matching the EVAnalyzer Fiji plugin ground truth. No declumping (plain connected-component labeling).']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
    Select the input image:SmoothCY5
    Name the primary objects to be identified:CY5Objects
    Typical diameter of objects, in pixel units (Min,Max):1,10000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.003052
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:CY7Objects, CY5Objects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:14|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notes:['Area filter: keep only CY7 objects with area >= 4 px (no upper bound).']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
    Select the objects to filter:CY7Objects
    Name the output objects:CY7Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:15|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notes:['Area filter: keep only CY5 objects with area >= 4 px (no upper bound).']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
    Select the objects to filter:CY5Objects
    Name the output objects:CY5Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:16|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
    Select the input objects:CY7Filtered
    Name the output image:CY7Mask
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:CY5Filtered
    Name the output image:CY5Mask
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:18|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notes:['Overlap of CY7 and CY5 binary masks = colocalized area.']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
    Operation:And
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ColocMask
    Image or measurement?:Image
    Select the image:CY7Mask
    Multiply the image by:1.0
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    Image or measurement?:Image
    Select the image:CY5Mask
    Multiply the image by:1.0
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
IdentifyPrimaryObjects:[module_num:19|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notes:['Colocalized-area objects from the binary AND mask. No minimum overlap area, no declumping.']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
    Select the input image:ColocMask
    Name the primary objects to be identified:ColocArea
    Typical diameter of objects, in pixel units (Min,Max):1,10000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.5
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
MeasureImageAreaOccupied:[module_num:20|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
    Measure the area occupied by:Objects
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    Select object sets to measure:CY7Filtered, CY5Filtered, ColocArea

ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
